// READ-ME: Make sure to go to (IN FIJI) PLUGINs -> Bio-Formats ->
// Bio-Formats-Plugin-configuration-> Formats -> Olympus FV1000 (Your scope, i.e. Nikon)-> select "Windowless"


input = getDirectory("Choose an input directory");
output = getDirectory("Choose an output directory");
processFolder(input);

function processFolder(input) {
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + File.separator + list[i]))
			processFolder(input + File.separator + list[i]);
		if(endsWith(list[i], ".tif"))
			processFile(input, output, list[i]);
	}
}

function processFile(inputFolder, output, file) {
open(inputFolder + file);
title = getTitle();

run("Split Channels");
selectWindow("C1-"+title);
selectWindow("C2-"+title);
selectWindow("C3-"+title);
close();

selectWindow("C1-"+title);
saveAs("PNG", output + file + "_DAPI.png");
close();

selectWindow("C2-"+title);
saveAs("PNG", output + file + "_GFP.png")
close();

selectWindow("C3-"+title);
saveAs("PNG", output + file + "_keratin.png");
close();

}

