// READ-ME: Make sure to go to (IN FIJI) PLUGINs -> Bio-Formats ->
// Bio-Formats-Plugin-configuration-> Formats -> Olympus FV1000 (Your scope)-> select "Windowless"


input = getDirectory("Choose an input directory");
output = getDirectory("Choose an output directory");
processFolder(input);

function processFolder(input) {
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + File.separator + list[i]))
			processFolder(input + File.separator + list[i]);
		if(endsWith(list[i], ".nd2"))
			processFile(input, output, list[i]);
	}
}

function processFile(inputFolder, output, file) {

open(inputFolder + file);
title = getTitle();

selectWindow(file +" - C=2");
run("Z Project...", "projection=[Max Intensity]");
saveAs("PNG", output + file + "_PR_nucleus");

selectWindow(file + " - C=1");
run("Z Project...", "projection=[Max Intensity]");
saveAs("PNG", output + file + "_K8");

selectWindow(file +" - C=0");
run("Z Project...", "projection=[Max Intensity]");
saveAs("PNG", output + file + "_DAPI");

three = file + "_PR_nucleus.png";
two =  file + "_K8.png";
one = file + "_DAPI.png";

//run("Merge Channels...","c1=["+one+"] c2=["+two+"] create keep");
//saveAs("PNG", output + file + "_merge_stack");

run("Merge Channels...","c2=["+two+"] c3=["+three+"] create keep");
saveAs("PNG", output + file + "_PRnuc-merge_stack");

run("Close All");

}


